# HH-model Postnova et al. (2009)
#
# Parameters and Initial conditions
par c=1
par tinc=27000, tdec=3312, tgl=30, tox=300
par gL=0.1, gna=3, gk=4, ggl=0.1, goxGL=0.13, gglOX=0.299
par EL=-60, Ena=50, Ek=-90, Esyn=50
init M=1, v1=-60, v2=-60
#
#tc=t-2500
#xc=(0.97*sin((pi/12)*tc)+0.22*sin(2*(pi/12)*tc)+0.07*sin(3*(pi/12)*tc)+0.03*sin(4*(pi/12)*tc)+0.001*sin(5*(pi/12)*tc))
Ic(t)=0.97*sin(w*t)+0.22*sin(2*w*t)+0.07*sin(3*w*t)+0.03*sin(4*w*t)+0.001*sin(5*w*t)+1
par w=2*pi/86400
#C=0.5(cos(w(t-t0))+1)
#
# Voltage-dependencies
m1=1/(1+exp(-0.25*(v1+25)))
m2=1/(1+exp(-0.25*(v2+25)))
n1inf(v1)=1/(1+exp(-0.25*(v1+25)))
n2inf(v2)=1/(1+exp(-0.25*(v2+25)))
OXinf(v1)=1/(1+exp(-(v1+20)))
binf(v2)=1/(1+exp(-(v2+20)))
#
# Gating variables
n1'=(n1inf(v1)-n1)/2
n2'=(n2inf(v2)-n2)/2
bOX'=(binf(v2)-bOX)/tgl
bGL'=(OXinf(v1)-bGL)/tgl
aox'=(OXinf(v1)*M-aox)/tox
#
# Orexin and Glutamate voltages
v1'=(Ic(t)-gL*(v1-EL)-gna*m1*(v1-Ena)-gk*n1*(v1-Ek)-gglOX*bOX*(v1-Esyn))/c
v2'=(-gL*(v2-EL)-gna*m2*(v2-Ena)-gk*n2*(v2-Ek)-ggl*bGL*(v2-Esyn)-goxGL*aox*(v2-Esyn))/c
M'=(1-M)/tinc-M*OXinf(v1)/tdec
#
# Track current
aux ibar=Ic
@ total=172800, dt=0.25
@ bound=172800
@ xhi=172800,ylo=-100,yhi=30
done